# Generated by Configurator on Tue Sep 13 19:25:38 EDT 2016

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM1,SerialManager,COM1
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,Spectra,LumencorSpectra,Spectra
Device,LudlController,Ludl,LudlController
Device,XYStage,Ludl,XYStage
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TIFilterBlock2,NikonTI,TIFilterBlock2
Device,RGB,NI100X,DigitalIO

# Pre-init settings for devices
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM1,AnswerTimeout,5000.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,Spectra,Port,COM5
Property,Spectra,SetLE_Type,SpectraX
Property,LudlController,Port,COM1

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TINosePiece,4000.0
Delay,TILightPath,1500.0
Delay,TIFilterBlock1,300.0
Delay,TIFilterBlock2,300.0

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Spectra
Property,Core,Focus,TIPFSOffset
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,0,1-Plan Fluor 4X NA 0.13
Label,TINosePiece,1,2-Unknown
Label,TINosePiece,2,3-Plan Fluor 20X 0.75
Label,TINosePiece,3,4-Plan Apo L 40X NA 0.95
Label,TINosePiece,4,5-Plan Fluor 10x NA 0.30
Label,TINosePiece,5,6-Plan Apo TIRF 60X

# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# TIFilterBlock1
Label,TIFilterBlock1,5,6------
Label,TIFilterBlock1,4,5-DAPI
Label,TIFilterBlock1,3,4-Cy5
Label,TIFilterBlock1,2,3-D-F-T
Label,TIFilterBlock1,1,2-FITC
Label,TIFilterBlock1,0,1-TRITC
# TIFilterBlock2
Label,TIFilterBlock2,5,6------
Label,TIFilterBlock2,4,5------
Label,TIFilterBlock2,3,4------
Label,TIFilterBlock2,2,3-DF
Label,TIFilterBlock2,1,2-IR-A
Label,TIFilterBlock2,0,1------
# RGB
Label,RGB,15,15
Label,RGB,14,14
Label,RGB,13,13
Label,RGB,12,12
Label,RGB,11,11
Label,RGB,10,10
Label,RGB,9,9
Label,RGB,8,8
Label,RGB,7,7
Label,RGB,6,6
Label,RGB,5,5
Label,RGB,4,4
Label,RGB,3,3
Label,RGB,2,2
Label,RGB,1,1
Label,RGB,0,0

# Configuration presets
# Group: Spectra
# Preset: white
ConfigGroup,Spectra,white,Spectra,Blue_Enable,1
ConfigGroup,Spectra,white,Spectra,Blue_Level,100
ConfigGroup,Spectra,white,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,white,Spectra,Cyan_Level,100
ConfigGroup,Spectra,white,Spectra,Green_Enable,1
ConfigGroup,Spectra,white,Spectra,Green_Level,100
ConfigGroup,Spectra,white,Spectra,Red_Enable,1
ConfigGroup,Spectra,white,Spectra,Red_Level,100
ConfigGroup,Spectra,white,Spectra,Teal_Enable,1
ConfigGroup,Spectra,white,Spectra,Teal_Level,100
ConfigGroup,Spectra,white,Spectra,Violet_Enable,1
ConfigGroup,Spectra,white,Spectra,Violet_Level,100
ConfigGroup,Spectra,white,RGB,State,0

# Preset: GFP
ConfigGroup,Spectra,GFP,Spectra,Blue_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Blue_Level,0
ConfigGroup,Spectra,GFP,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Cyan_Level,100
ConfigGroup,Spectra,GFP,Spectra,Green_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Green_Level,0
ConfigGroup,Spectra,GFP,Spectra,Red_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Red_Level,0
ConfigGroup,Spectra,GFP,Spectra,Teal_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Teal_Level,0
ConfigGroup,Spectra,GFP,Spectra,Violet_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Violet_Level,0
ConfigGroup,Spectra,GFP,RGB,State,0

# Preset: BF
ConfigGroup,Spectra,BF,Spectra,Blue_Enable,0
ConfigGroup,Spectra,BF,Spectra,Blue_Level,0
ConfigGroup,Spectra,BF,Spectra,Cyan_Enable,0
ConfigGroup,Spectra,BF,Spectra,Cyan_Level,0
ConfigGroup,Spectra,BF,Spectra,Green_Enable,0
ConfigGroup,Spectra,BF,Spectra,Green_Level,0
ConfigGroup,Spectra,BF,Spectra,Red_Enable,0
ConfigGroup,Spectra,BF,Spectra,Red_Level,0
ConfigGroup,Spectra,BF,Spectra,Teal_Enable,0
ConfigGroup,Spectra,BF,Spectra,Teal_Level,0
ConfigGroup,Spectra,BF,Spectra,Violet_Enable,0
ConfigGroup,Spectra,BF,Spectra,Violet_Level,0
ConfigGroup,Spectra,BF,RGB,State,1

# Preset: empty
ConfigGroup,Spectra,empty,Spectra,Blue_Enable,1
ConfigGroup,Spectra,empty,Spectra,Blue_Level,0
ConfigGroup,Spectra,empty,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,empty,Spectra,Cyan_Level,0
ConfigGroup,Spectra,empty,Spectra,Green_Enable,1
ConfigGroup,Spectra,empty,Spectra,Green_Level,0
ConfigGroup,Spectra,empty,Spectra,Red_Enable,1
ConfigGroup,Spectra,empty,Spectra,Red_Level,0
ConfigGroup,Spectra,empty,Spectra,Teal_Enable,1
ConfigGroup,Spectra,empty,Spectra,Teal_Level,0
ConfigGroup,Spectra,empty,Spectra,Violet_Enable,1
ConfigGroup,Spectra,empty,Spectra,Violet_Level,0
ConfigGroup,Spectra,empty,RGB,State,1

# Preset: DAPI
ConfigGroup,Spectra,DAPI,Spectra,Blue_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Blue_Level,0
ConfigGroup,Spectra,DAPI,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Cyan_Level,0
ConfigGroup,Spectra,DAPI,Spectra,Green_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Green_Level,0
ConfigGroup,Spectra,DAPI,Spectra,Red_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Red_Level,0
ConfigGroup,Spectra,DAPI,Spectra,Teal_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Teal_Level,0
ConfigGroup,Spectra,DAPI,Spectra,Violet_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Violet_Level,100
ConfigGroup,Spectra,DAPI,RGB,State,0

# Preset: Cy5
ConfigGroup,Spectra,Cy5,Spectra,Blue_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Blue_Level,0
ConfigGroup,Spectra,Cy5,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Cyan_Level,0
ConfigGroup,Spectra,Cy5,Spectra,Green_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Green_Level,0
ConfigGroup,Spectra,Cy5,Spectra,Red_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Red_Level,100
ConfigGroup,Spectra,Cy5,Spectra,Teal_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Teal_Level,0
ConfigGroup,Spectra,Cy5,Spectra,Violet_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Violet_Level,0
ConfigGroup,Spectra,Cy5,RGB,State,0

# Preset: Cy3
ConfigGroup,Spectra,Cy3,Spectra,Blue_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Blue_Level,0
ConfigGroup,Spectra,Cy3,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Cyan_Level,0
ConfigGroup,Spectra,Cy3,Spectra,Green_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Green_Level,100
ConfigGroup,Spectra,Cy3,Spectra,Red_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Red_Level,0
ConfigGroup,Spectra,Cy3,Spectra,Teal_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Teal_Level,0
ConfigGroup,Spectra,Cy3,Spectra,Violet_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Violet_Level,0
ConfigGroup,Spectra,Cy3,RGB,State,0


# Group: Z Drive
# Preset: TIPFSOffset
ConfigGroup,Z Drive,TIPFSOffset,Core,Focus,TIPFSOffset

# Preset: TIZDrive
ConfigGroup,Z Drive,TIZDrive,Core,Focus,TIZDrive


# Group: Filter2
# Preset: empty
ConfigGroup,Filter2,empty,TIFilterBlock2,Label,1------
ConfigGroup,Filter2,empty,TIFilterBlock2,State,0


# Group: Objective

# Preset: 4X NA 0.13
ConfigGroup,Objective,4X NA 0.13,TINosePiece,Label,1-Plan Fluor 4X NA 0.13
ConfigGroup,Objective,4X NA 0.13,TINosePiece,State,0
ConfigGroup,Objective,4X NA 0.13,XYStage,Speed,8000.0000
ConfigGroup,Objective,4X NA 0.13,XYStage,StepSize,0.0500
ConfigGroup,Objective,4X NA 0.13,XYStage,TransposeMirrorX,1
ConfigGroup,Objective,4X NA 0.13,XYStage,TransposeMirrorY,1
ConfigGroup,Objective,4X NA 0.13,TILightPath,Label,2-Left100
ConfigGroup,Objective,4X NA 0.13,TILightPath,State,1
ConfigGroup,Objective,4X NA 0.13,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,4X NA 0.13,HamamatsuHam_DCAM,TransposeMirrorY,1

# Preset: 10X NA 0.30
ConfigGroup,Objective,10X NA 0.30,TINosePiece,Label,5-Plan Fluor 10x NA 0.30
ConfigGroup,Objective,10X NA 0.30,TINosePiece,State,4
ConfigGroup,Objective,10X NA 0.30,TILightPath,Label,2-Left100
ConfigGroup,Objective,10X NA 0.30,TILightPath,State,1
ConfigGroup,Objective,10X NA 0.30,XYStage,Speed,8000.0000
ConfigGroup,Objective,10X NA 0.30,XYStage,StepSize,0.0500
ConfigGroup,Objective,10X NA 0.30,XYStage,TransposeMirrorX,1
ConfigGroup,Objective,10X NA 0.30,XYStage,TransposeMirrorY,1
ConfigGroup,Objective,10X NA 0.30,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,10X NA 0.30,HamamatsuHam_DCAM,TransposeMirrorY,1


# Preset: 20X NA 0.75
ConfigGroup,Objective,20X NA 0.75,TINosePiece,Label,3-Plan Fluor 20X 0.75
ConfigGroup,Objective,20X NA 0.75,TINosePiece,State,2
ConfigGroup,Objective,20X NA 0.75,TILightPath,Label,2-Left100
ConfigGroup,Objective,20X NA 0.75,TILightPath,State,1
ConfigGroup,Objective,20X NA 0.75,XYStage,Speed,8000.0000
ConfigGroup,Objective,20X NA 0.75,XYStage,StepSize,0.0500
ConfigGroup,Objective,20X NA 0.75,XYStage,TransposeMirrorX,1
ConfigGroup,Objective,20X NA 0.75,XYStage,TransposeMirrorY,1
ConfigGroup,Objective,20X NA 0.75,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,20X NA 0.75,HamamatsuHam_DCAM,TransposeMirrorY,1


# Preset: 40X NA 0.95
ConfigGroup,Objective,40X NA 0.95,TINosePiece,Label,4-Plan Apo L 40X NA 0.95
ConfigGroup,Objective,40X NA 0.95,TINosePiece,State,3
ConfigGroup,Objective,40X NA 0.95,TILightPath,Label,2-Left100
ConfigGroup,Objective,40X NA 0.95,TILightPath,State,1
ConfigGroup,Objective,40X NA 0.95,XYStage,Speed,6000.0000
ConfigGroup,Objective,40X NA 0.95,XYStage,StepSize,0.0500
ConfigGroup,Objective,40X NA 0.95,XYStage,TransposeMirrorX,1
ConfigGroup,Objective,40X NA 0.95,XYStage,TransposeMirrorY,1
ConfigGroup,Objective,40X NA 0.95,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,40X NA 0.95,HamamatsuHam_DCAM,TransposeMirrorY,1


# Preset: 60X NA 1.49
ConfigGroup,Objective,60X NA 1.49,TINosePiece,Label,6-Plan Apo TIRF 60X
ConfigGroup,Objective,60X NA 1.49,TINosePiece,State,5
ConfigGroup,Objective,60X NA 1.49,TILightPath,Label,2-Left100
ConfigGroup,Objective,60X NA 1.49,TILightPath,State,1
ConfigGroup,Objective,60X NA 1.49,XYStage,Speed,2500.0000
ConfigGroup,Objective,60X NA 1.49,XYStage,StepSize,0.0500
ConfigGroup,Objective,60X NA 1.49,XYStage,TransposeMirrorX,1
ConfigGroup,Objective,60X NA 1.49,XYStage,TransposeMirrorY,1
ConfigGroup,Objective,60X NA 1.49,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,60X NA 1.49,HamamatsuHam_DCAM,TransposeMirrorY,1



# Group: Filter1
# Preset: LED QUAD
ConfigGroup,Filter1,LED QUAD,TIFilterBlock1,Label,3-D-F-T
ConfigGroup,Filter1,LED QUAD,TIFilterBlock1,State,2

# Preset: empty
ConfigGroup,Filter1,empty,TIFilterBlock1,Label,1-TRITC
ConfigGroup,Filter1,empty,TIFilterBlock1,State,0



# PixelSize settings


# Resolution preset: 4X
ConfigPixelSize,4X,TINosePiece,Label,1-Plan Fluor 4X NA 0.13
ConfigPixelSize,4X,TINosePiece,State,0
ConfigPixelSize,4X,XYStage,StepSize,0.0500
PixelSize_um,4X,1.65

# Resolution preset: 10X
ConfigPixelSize,10X,TINosePiece,Label,5-Plan Fluor 10x NA 0.30
ConfigPixelSize,10X,TINosePiece,State,4
ConfigPixelSize,10X,XYStage,StepSize,0.0500
PixelSize_um,10X,0.66

# Resolution preset: 20X
ConfigPixelSize,20X,TINosePiece,Label,3-Plan Fluor 20X 0.75
ConfigPixelSize,20X,TINosePiece,State,2
ConfigPixelSize,20X,XYStage,StepSize,0.0500
PixelSize_um,20X,0.33

# Resolution preset: 40X
ConfigPixelSize,40X,TINosePiece,Label,4-Plan Apo L 40X NA 0.95
ConfigPixelSize,40X,TINosePiece,State,3
ConfigPixelSize,40X,XYStage,StepSize,0.0500
PixelSize_um,40X,0.165

# Resolution preset: 60X
ConfigPixelSize,60X,TINosePiece,Label,6-Plan Apo TIRF 60X
ConfigPixelSize,60X,TINosePiece,State,5
ConfigPixelSize,60X,XYStage,StepSize,0.0500
PixelSize_um,60X,0.11



