# Generated by Configurator on Mon Apr 09 14:35:34 EDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM2,SerialManager,COM2
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TIFilterBlock2,NikonTI,TIFilterBlock2
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,Spectra,LumencorSpectra,Spectra
Device,LudlController,Ludl,LudlController
Device,XYStage,Ludl,XYStage

# Pre-init settings for devices
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM2,AnswerTimeout,2000.0000
Property,COM2,BaudRate,9600
Property,COM2,DelayBetweenCharsMs,11.0000
Property,COM2,Handshaking,Off
Property,COM2,Parity,None
Property,COM2,StopBits,2
Property,COM2,Verbose,1
Property,Spectra,Port,COM6
Property,Spectra,SetLE_Type,Spectra
Property,LudlController,Port,COM2

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TIFilterBlock2,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Spectra
Property,Core,Focus,TIPFSOffset
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo TIRF 100x NA 1.45 Oil
Label,TINosePiece,4,5-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,3,4-Plan Apo 40x NA 0.95 Dry
Label,TINosePiece,2,3-Plan Apo 20x NA 0.75 Dry
Label,TINosePiece,1,2-Plan Apo 10x NA 0.45 Dry
Label,TINosePiece,0,1-Plan Apo 4x NA 0.20 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-Cy7
Label,TIFilterBlock1,4,5-L-590
Label,TIFilterBlock1,3,4-Cy3
Label,TIFilterBlock1,2,3-Cy5
Label,TIFilterBlock1,1,2-GFP-L
Label,TIFilterBlock1,0,1-DAPI
# TIFilterBlock2
Label,TIFilterBlock2,5,6------
Label,TIFilterBlock2,4,5------
Label,TIFilterBlock2,3,4------
Label,TIFilterBlock2,2,3------
Label,TIFilterBlock2,1,2------
Label,TIFilterBlock2,0,1------
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Spectra
# Preset: white
ConfigGroup,Spectra,white,Spectra,Blue_Enable,1
ConfigGroup,Spectra,white,Spectra,Blue_Level,10
ConfigGroup,Spectra,white,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,white,Spectra,Cyan_Level,10
ConfigGroup,Spectra,white,Spectra,Green_Enable,1
ConfigGroup,Spectra,white,Spectra,Green_Level,10
ConfigGroup,Spectra,white,Spectra,Red_Enable,1
ConfigGroup,Spectra,white,Spectra,Red_Level,10
ConfigGroup,Spectra,white,Spectra,Teal_Enable,1
ConfigGroup,Spectra,white,Spectra,Teal_Level,10
ConfigGroup,Spectra,white,Spectra,Violet_Enable,1
ConfigGroup,Spectra,white,Spectra,Violet_Level,10


# Group: Z Drive
# Preset: TIPFSOffset
ConfigGroup,Z Drive,TIPFSOffset,Core,Focus,TIPFSOffset

# Preset: TIZDrive
ConfigGroup,Z Drive,TIZDrive,Core,Focus,TIZDrive


# Group: Objective
# Preset: 60X NA 1.49
ConfigGroup,Objective,60X NA 1.49,TILightPath,Label,3-Right100
ConfigGroup,Objective,60X NA 1.49,TILightPath,State,2
ConfigGroup,Objective,60X NA 1.49,TINosePiece,Label,5-Plan Apo 60x NA 1.40 Oil
ConfigGroup,Objective,60X NA 1.49,TINosePiece,State,4
ConfigGroup,Objective,60X NA 1.49,XYStage,Speed,2500.0000
ConfigGroup,Objective,60X NA 1.49,XYStage,StepSize,0.0500
ConfigGroup,Objective,60X NA 1.49,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,60X NA 1.49,HamamatsuHam_DCAM,TransposeMirrorY,1

# Preset: 40X NA 0.95
ConfigGroup,Objective,40X NA 0.95,TINosePiece,Label,4-Plan Apo 40x NA 0.95 Dry
ConfigGroup,Objective,40X NA 0.95,TINosePiece,State,3
ConfigGroup,Objective,40X NA 0.95,XYStage,Speed,4000.0000
ConfigGroup,Objective,40X NA 0.95,XYStage,StepSize,0.0500
ConfigGroup,Objective,40X NA 0.95,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,40X NA 0.95,HamamatsuHam_DCAM,TransposeMirrorY,1

# Preset: 10X NA 0.45
ConfigGroup,Objective,10X NA 0.45,TINosePiece,Label,2-Plan Apo 10x NA 0.45 Dry
ConfigGroup,Objective,10X NA 0.45,TINosePiece,State,1
ConfigGroup,Objective,10X NA 0.45,XYStage,Speed,4000.0000
ConfigGroup,Objective,10X NA 0.45,XYStage,StepSize,0.0500
ConfigGroup,Objective,10X NA 0.45,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,10X NA 0.45,HamamatsuHam_DCAM,TransposeMirrorY,1
ConfigGroup,Objective,10X NA 0.45,TILightPath,Label,3-Right100
ConfigGroup,Objective,10X NA 0.45,TILightPath,State,2

# Preset: 100X NA 1.49
ConfigGroup,Objective,100X NA 1.49,TINosePiece,Label,6-Plan Apo TIRF 100x NA 1.45 Oil
ConfigGroup,Objective,100X NA 1.49,TINosePiece,State,5
ConfigGroup,Objective,100X NA 1.49,XYStage,Speed,2500.0000
ConfigGroup,Objective,100X NA 1.49,XYStage,StepSize,0.0500
ConfigGroup,Objective,100X NA 1.49,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,100X NA 1.49,HamamatsuHam_DCAM,TransposeMirrorY,1

# Preset: 4X NA 0.2
ConfigGroup,Objective,4X NA 0.2,TINosePiece,Label,1-Plan Apo 4x NA 0.20 Dry
ConfigGroup,Objective,4X NA 0.2,TINosePiece,State,0
ConfigGroup,Objective,4X NA 0.2,XYStage,Speed,8000.0000
ConfigGroup,Objective,4X NA 0.2,XYStage,StepSize,0.0500
ConfigGroup,Objective,4X NA 0.2,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,4X NA 0.2,HamamatsuHam_DCAM,TransposeMirrorY,1
ConfigGroup,Objective,4X NA 0.2,TILightPath,Label,3-Right100
ConfigGroup,Objective,4X NA 0.2,TILightPath,State,2

# Preset: 20X NA 0.40
ConfigGroup,Objective,20X NA 0.40,TINosePiece,Label,3-Plan Apo 20x NA 0.75 Dry
ConfigGroup,Objective,20X NA 0.40,TINosePiece,State,2
ConfigGroup,Objective,20X NA 0.40,XYStage,Speed,8000.0000
ConfigGroup,Objective,20X NA 0.40,XYStage,StepSize,0.0500
ConfigGroup,Objective,20X NA 0.40,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,20X NA 0.40,HamamatsuHam_DCAM,TransposeMirrorY,1
ConfigGroup,Objective,20X NA 0.40,TILightPath,Label,3-Right100
ConfigGroup,Objective,20X NA 0.40,TILightPath,State,2


# Group: Filter1
# Preset: GFP
ConfigGroup,Filter1,GFP,TIFilterBlock1,Label,2-GFP-L
ConfigGroup,Filter1,GFP,TIFilterBlock1,State,1

# Preset: Cy7
ConfigGroup,Filter1,Cy7,TIFilterBlock1,Label,6-Cy7
ConfigGroup,Filter1,Cy7,TIFilterBlock1,State,5

# Preset: A594
ConfigGroup,Filter1,A594,TIFilterBlock1,Label,5-L-590
ConfigGroup,Filter1,A594,TIFilterBlock1,State,4

# Preset: DAPI
ConfigGroup,Filter1,DAPI,TIFilterBlock1,Label,1-DAPI
ConfigGroup,Filter1,DAPI,TIFilterBlock1,State,0

# Preset: Cy5
ConfigGroup,Filter1,Cy5,TIFilterBlock1,Label,3-Cy5
ConfigGroup,Filter1,Cy5,TIFilterBlock1,State,2

# Preset: Cy3
ConfigGroup,Filter1,Cy3,TIFilterBlock1,Label,4-Cy3
ConfigGroup,Filter1,Cy3,TIFilterBlock1,State,3



# PixelSize settings
# Resolution preset: 60X
ConfigPixelSize,60X,TINosePiece,Label,5-Apo TIRF 60x NA 1.49 Oil
PixelSize_um,60X,0.11
ConfigPixelSize,60X,TINosePiece,State,4
PixelSize_um,60X,0.11
ConfigPixelSize,60X,XYStage,StepSize,0.0500
PixelSize_um,60X,0.11

# Resolution preset: 4X
ConfigPixelSize,4X,TINosePiece,Label,1-Plan Apo 4x NA 0.20 Dry
PixelSize_um,4X,1.65
ConfigPixelSize,4X,TINosePiece,State,0
PixelSize_um,4X,1.65
ConfigPixelSize,4X,XYStage,StepSize,0.0500
PixelSize_um,4X,1.65

# Resolution preset: 20X
ConfigPixelSize,20X,TINosePiece,Label,3-Plan Apo 20x NA 0.75 Dry
PixelSize_um,20X,0.33
ConfigPixelSize,20X,TINosePiece,State,2
PixelSize_um,20X,0.33
ConfigPixelSize,20X,XYStage,StepSize,0.0500
PixelSize_um,20X,0.33

# Resolution preset: 40X
ConfigPixelSize,40X,TINosePiece,Label,4-Plan Apo 40x NA 0.95 Dry
PixelSize_um,40X,0.175
ConfigPixelSize,40X,TINosePiece,State,3
PixelSize_um,40X,0.175
ConfigPixelSize,40X,XYStage,StepSize,0.0500
PixelSize_um,40X,0.175

# Resolution preset: 100X
ConfigPixelSize,100X,TINosePiece,Label,6-Plan Apo TIRF 100x NA 1.45 Oil
PixelSize_um,100X,0.066
ConfigPixelSize,100X,TINosePiece,State,5
PixelSize_um,100X,0.066
ConfigPixelSize,100X,XYStage,StepSize,0.0500
PixelSize_um,100X,0.066

# Resolution preset: 10X
ConfigPixelSize,10X,TINosePiece,Label,2-Plan Apo 10x NA 0.45 Dry
PixelSize_um,10X,0.66
ConfigPixelSize,10X,TINosePiece,State,1
PixelSize_um,10X,0.66
ConfigPixelSize,10X,XYStage,StepSize,0.0500
PixelSize_um,10X,0.66




