# Generated by Configurator on Mon Sep 28 12:18:13 EDT 2015

# Reset
Property,Core,Initialize,0

# Devices
Device,COM25,SerialManager,COM25
Device,COM4,SerialManager,COM4
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,Spectra,LumencorSpectra,Spectra
Device,LudlController,Ludl,LudlController
Device,XYStage,Ludl,XYStage
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TIFilterBlock2,NikonTI,TIFilterBlock2

# Pre-init settings for devices
Property,COM25,AnswerTimeout,500.0000
Property,COM25,BaudRate,9600
Property,COM25,DelayBetweenCharsMs,0.0000
Property,COM25,Handshaking,Off
Property,COM25,Parity,None
Property,COM25,StopBits,1
Property,COM25,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,Spectra,Port,COM4
Property,Spectra,SetLE_Type,SpectraX
Property,LudlController,Port,COM25

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,Spectra
Property,Core,Focus,TIPFSOffset
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Fluor 4x NA 0.13 Dry
Label,TINosePiece,4,5-Apo TIRF 60x NA 1.49 Oil
Label,TINosePiece,3,4-Apo TIRF 100x NA 1.49 Oil
Label,TINosePiece,2,3-Plan Apo 40x NA 0.95 Dry
Label,TINosePiece,1,2-Plan 20x NA 0.40 Dry
Label,TINosePiece,0,1-Plan Fluor 10x NA 0.30 Dry
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# TIFilterBlock1
Label,TIFilterBlock1,5,6-4LASE
Label,TIFilterBlock1,4,5-Dual
Label,TIFilterBlock1,3,4-GFP-B
Label,TIFilterBlock1,2,3-FITC
Label,TIFilterBlock1,1,2-Cy5
Label,TIFilterBlock1,0,1-DIA
# TIFilterBlock2
Label,TIFilterBlock2,5,6-SPECT
Label,TIFilterBlock2,4,5-A594
Label,TIFilterBlock2,3,4-Cy3
Label,TIFilterBlock2,2,3-Cy5
Label,TIFilterBlock2,1,2-FITC
Label,TIFilterBlock2,0,1-DAPI

# Configuration presets
# Group: Spectra
# Preset: white
ConfigGroup,Spectra,white,Spectra,Blue_Enable,1
ConfigGroup,Spectra,white,Spectra,Blue_Level,100
ConfigGroup,Spectra,white,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,white,Spectra,Cyan_Level,100
ConfigGroup,Spectra,white,Spectra,Green_Enable,1
ConfigGroup,Spectra,white,Spectra,Green_Level,100
ConfigGroup,Spectra,white,Spectra,Red_Enable,1
ConfigGroup,Spectra,white,Spectra,Red_Level,100
ConfigGroup,Spectra,white,Spectra,Teal_Enable,1
ConfigGroup,Spectra,white,Spectra,Teal_Level,100
ConfigGroup,Spectra,white,Spectra,Violet_Enable,1
ConfigGroup,Spectra,white,Spectra,Violet_Level,100

# Preset: GFP
ConfigGroup,Spectra,GFP,Spectra,Blue_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Blue_Level,0
ConfigGroup,Spectra,GFP,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Cyan_Level,100
ConfigGroup,Spectra,GFP,Spectra,Green_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Green_Level,0
ConfigGroup,Spectra,GFP,Spectra,Red_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Red_Level,0
ConfigGroup,Spectra,GFP,Spectra,Teal_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Teal_Level,0
ConfigGroup,Spectra,GFP,Spectra,Violet_Enable,1
ConfigGroup,Spectra,GFP,Spectra,Violet_Level,0

# Preset: empty
ConfigGroup,Spectra,empty,Spectra,Blue_Enable,1
ConfigGroup,Spectra,empty,Spectra,Blue_Level,0
ConfigGroup,Spectra,empty,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,empty,Spectra,Cyan_Level,0
ConfigGroup,Spectra,empty,Spectra,Green_Enable,1
ConfigGroup,Spectra,empty,Spectra,Green_Level,0
ConfigGroup,Spectra,empty,Spectra,Red_Enable,1
ConfigGroup,Spectra,empty,Spectra,Red_Level,0
ConfigGroup,Spectra,empty,Spectra,Teal_Enable,1
ConfigGroup,Spectra,empty,Spectra,Teal_Level,0
ConfigGroup,Spectra,empty,Spectra,Violet_Enable,1
ConfigGroup,Spectra,empty,Spectra,Violet_Level,0

# Preset: DAPI
ConfigGroup,Spectra,DAPI,Spectra,Blue_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Blue_Level,0
ConfigGroup,Spectra,DAPI,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Cyan_Level,0
ConfigGroup,Spectra,DAPI,Spectra,Green_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Green_Level,0
ConfigGroup,Spectra,DAPI,Spectra,Red_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Red_Level,0
ConfigGroup,Spectra,DAPI,Spectra,Teal_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Teal_Level,0
ConfigGroup,Spectra,DAPI,Spectra,Violet_Enable,1
ConfigGroup,Spectra,DAPI,Spectra,Violet_Level,100

# Preset: Cy5
ConfigGroup,Spectra,Cy5,Spectra,Blue_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Blue_Level,0
ConfigGroup,Spectra,Cy5,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Cyan_Level,0
ConfigGroup,Spectra,Cy5,Spectra,Green_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Green_Level,0
ConfigGroup,Spectra,Cy5,Spectra,Red_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Red_Level,100
ConfigGroup,Spectra,Cy5,Spectra,Teal_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Teal_Level,0
ConfigGroup,Spectra,Cy5,Spectra,Violet_Enable,1
ConfigGroup,Spectra,Cy5,Spectra,Violet_Level,0

# Preset: Cy3
ConfigGroup,Spectra,Cy3,Spectra,Blue_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Blue_Level,0
ConfigGroup,Spectra,Cy3,Spectra,Cyan_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Cyan_Level,0
ConfigGroup,Spectra,Cy3,Spectra,Green_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Green_Level,100
ConfigGroup,Spectra,Cy3,Spectra,Red_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Red_Level,0
ConfigGroup,Spectra,Cy3,Spectra,Teal_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Teal_Level,0
ConfigGroup,Spectra,Cy3,Spectra,Violet_Enable,1
ConfigGroup,Spectra,Cy3,Spectra,Violet_Level,0


# Group: Z Drive
# Preset: TIPFSOffset
ConfigGroup,Z Drive,TIPFSOffset,Core,Focus,TIPFSOffset

# Preset: TIZDrive
ConfigGroup,Z Drive,TIZDrive,Core,Focus,TIZDrive


# Group: Filter2
# Preset: Spectra QUAD
ConfigGroup,Filter2,Spectra QUAD,TIFilterBlock2,Label,6-SPECT
ConfigGroup,Filter2,Spectra QUAD,TIFilterBlock2,State,5

# Preset: GFP
ConfigGroup,Filter2,GFP,TIFilterBlock2,Label,2-FITC
ConfigGroup,Filter2,GFP,TIFilterBlock2,State,1

# Preset: A594
ConfigGroup,Filter2,A594,TIFilterBlock2,Label,5-A594
ConfigGroup,Filter2,A594,TIFilterBlock2,State,4

# Preset: DAPI
ConfigGroup,Filter2,DAPI,TIFilterBlock2,Label,1-DAPI
ConfigGroup,Filter2,DAPI,TIFilterBlock2,State,0

# Preset: Cy5
ConfigGroup,Filter2,Cy5,TIFilterBlock2,Label,3-Cy5
ConfigGroup,Filter2,Cy5,TIFilterBlock2,State,2

# Preset: Cy3
ConfigGroup,Filter2,Cy3,TIFilterBlock2,Label,4-Cy3
ConfigGroup,Filter2,Cy3,TIFilterBlock2,State,3


# Group: Objective
# Preset: 40X NA 0.95
ConfigGroup,Objective,40X NA 0.95,TINosePiece,Label,3-Plan Apo 40x NA 0.95 Dry
ConfigGroup,Objective,40X NA 0.95,TINosePiece,State,2
ConfigGroup,Objective,40X NA 0.95,TILightPath,Label,2-Left100
ConfigGroup,Objective,40X NA 0.95,TILightPath,State,1
ConfigGroup,Objective,40X NA 0.95,XYStage,Speed,4000.0000
ConfigGroup,Objective,40X NA 0.95,XYStage,StepSize,0.0500
ConfigGroup,Objective,40X NA 0.95,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,40X NA 0.95,HamamatsuHam_DCAM,TransposeMirrorY,1

# Preset: 4X
ConfigGroup,Objective,4X,TINosePiece,Label,6-Plan Fluor 4x NA 0.13 Dry
ConfigGroup,Objective,4X,TINosePiece,State,5
ConfigGroup,Objective,4X,XYStage,Speed,8000.0000
ConfigGroup,Objective,4X,XYStage,StepSize,0.0500
ConfigGroup,Objective,4X,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,4X,HamamatsuHam_DCAM,TransposeMirrorY,1
ConfigGroup,Objective,4X,TILightPath,Label,2-Left100
ConfigGroup,Objective,4X,TILightPath,State,1

# Preset: 100X NA 1.49
ConfigGroup,Objective,100X NA 1.49,TINosePiece,Label,4-Apo TIRF 100x NA 1.49 Oil
ConfigGroup,Objective,100X NA 1.49,TINosePiece,State,3
ConfigGroup,Objective,100X NA 1.49,TILightPath,Label,2-Left100
ConfigGroup,Objective,100X NA 1.49,TILightPath,State,1
ConfigGroup,Objective,100X NA 1.49,XYStage,Speed,2500.0000
ConfigGroup,Objective,100X NA 1.49,XYStage,StepSize,0.0500
ConfigGroup,Objective,100X NA 1.49,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,100X NA 1.49,HamamatsuHam_DCAM,TransposeMirrorY,1

# Preset: 60X NA 1.49
ConfigGroup,Objective,60X NA 1.49,TINosePiece,Label,5-Apo TIRF 60x NA 1.49 Oil
ConfigGroup,Objective,60X NA 1.49,TINosePiece,State,4
ConfigGroup,Objective,60X NA 1.49,TILightPath,Label,2-Left100
ConfigGroup,Objective,60X NA 1.49,TILightPath,State,1
ConfigGroup,Objective,60X NA 1.49,XYStage,Speed,2500.0000
ConfigGroup,Objective,60X NA 1.49,XYStage,StepSize,0.0500
ConfigGroup,Objective,60X NA 1.49,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,60X NA 1.49,HamamatsuHam_DCAM,TransposeMirrorY,1

# Preset: 10X
ConfigGroup,Objective,10X,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,Objective,10X,TINosePiece,State,0
ConfigGroup,Objective,10X,XYStage,Speed,4000.0000
ConfigGroup,Objective,10X,XYStage,StepSize,0.0500
ConfigGroup,Objective,10X,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,10X,HamamatsuHam_DCAM,TransposeMirrorY,1
ConfigGroup,Objective,10X,TILightPath,Label,2-Left100
ConfigGroup,Objective,10X,TILightPath,State,1

# Preset: 20X NA 0.40
ConfigGroup,Objective,20X NA 0.40,TINosePiece,Label,2-Plan 20x NA 0.40 Dry
ConfigGroup,Objective,20X NA 0.40,TINosePiece,State,1
ConfigGroup,Objective,20X NA 0.40,TILightPath,Label,2-Left100
ConfigGroup,Objective,20X NA 0.40,TILightPath,State,1
ConfigGroup,Objective,20X NA 0.40,XYStage,Speed,8000.0000
ConfigGroup,Objective,20X NA 0.40,XYStage,StepSize,0.0500
ConfigGroup,Objective,20X NA 0.40,HamamatsuHam_DCAM,TransposeMirrorX,1
ConfigGroup,Objective,20X NA 0.40,HamamatsuHam_DCAM,TransposeMirrorY,1


# Group: Filter1
# Preset: Laser QUAD
ConfigGroup,Filter1,Laser QUAD,TIFilterBlock1,Label,6-4LASE
ConfigGroup,Filter1,Laser QUAD,TIFilterBlock1,State,5

# Preset: empty
ConfigGroup,Filter1,empty,TIFilterBlock1,Label,1-DIA
ConfigGroup,Filter1,empty,TIFilterBlock1,State,0



# PixelSize settings
# Resolution preset: 4X
ConfigPixelSize,4X,TINosePiece,Label,6-Plan Fluor 4x NA 0.13 Dry
PixelSize_um,4X,1.65
ConfigPixelSize,4X,TINosePiece,State,5
PixelSize_um,4X,1.65
ConfigPixelSize,4X,XYStage,StepSize,0.0500
PixelSize_um,4X,1.65

# Resolution preset: 20X
ConfigPixelSize,20X,TINosePiece,Label,2-Plan 20x NA 0.40 Dry
PixelSize_um,20X,0.33
ConfigPixelSize,20X,TINosePiece,State,1
PixelSize_um,20X,0.33
ConfigPixelSize,20X,XYStage,StepSize,0.0500
PixelSize_um,20X,0.33

# Resolution preset: 40X
ConfigPixelSize,40X,TINosePiece,Label,3-Plan Apo 40x NA 0.95 Dry
PixelSize_um,40X,0.175
ConfigPixelSize,40X,TINosePiece,State,2
PixelSize_um,40X,0.175
ConfigPixelSize,40X,XYStage,StepSize,0.0500
PixelSize_um,40X,0.175

# Resolution preset: 10X
ConfigPixelSize,10X,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
PixelSize_um,10X,0.66
ConfigPixelSize,10X,TINosePiece,State,0
PixelSize_um,10X,0.66
ConfigPixelSize,10X,XYStage,StepSize,0.0500
PixelSize_um,10X,0.66

# Resolution preset: 100X
ConfigPixelSize,100X,TINosePiece,Label,4-Apo TIRF 100x NA 1.49 Oil
PixelSize_um,100X,0.066
ConfigPixelSize,100X,TINosePiece,State,3
PixelSize_um,100X,0.066
ConfigPixelSize,100X,XYStage,StepSize,0.0500
PixelSize_um,100X,0.066

# Resolution preset: 60X
ConfigPixelSize,60X,TINosePiece,Label,5-Apo TIRF 60x NA 1.49 Oil
PixelSize_um,60X,0.11
ConfigPixelSize,60X,TINosePiece,State,4
PixelSize_um,60X,0.11
ConfigPixelSize,100X,XYStage,StepSize,0.0500
PixelSize_um,60X,0.11

